'<ADbasic Header, Headerversion 001.001>
'<Header End>
' this program implements CR check with position and laser locking
'
' protocol:
' mode  0:  green pulse, 
'           photon counting just for statistics
' mode  1:  E/A pulse, photon counting  ->  CR check
'           fail: -> mode 0


#DEFINE max_stat           10
#DEFINE max_repetitions 100000
#DEFINE max_CR_duration   500
#DEFINE max_repump_duration 2000

'init
DIM DATA_30[100] AS LONG               ' CR integer parameters
DIM DATA_31[100] AS FLOAT              ' CR float parameters

'DIM DATA_18[max_repump_duration] AS FLOAT AT DM_LOCAL 'repump freq voltage sine
'DIM DATA_19[max_CR_duration] AS FLOAT AT DM_LOCAL 'CR gate voltage sine

DIM DATA_16[2][max_repump_duration] AS FLOAT AT DM_LOCAL ' repump voltage
DIM DATA_17[max_CR_duration] AS FLOAT AT DM_LOCAL ' cr mod voltage
DIM DATA_18[2][max_repump_duration] AS LONG AT DM_LOCAL ' repump freq DAC settings
DIM DATA_19[max_CR_duration] AS LONG AT DM_LOCAL ' CR gate DAC settings

'return
'used in cr.inc
DIM DATA_22[max_repetitions] AS LONG  ' CR counts before sequence
DIM DATA_23[max_repetitions] AS LONG  ' CR counts after sequence
DIM DATA_26[max_stat] AS LONG         ' statistics

DIM cr_mode, cr_timer, cr_i AS LONG
DIM cr_counts, cr_old_counts, total_CR_counts AS LONG
DIM cr_r_counts, cr_r_old_counts AS LONG
DIM CR_probe, CR_preselect, CR_repump, current_CR_threshold AS LONG
DIM repumps, CR_failed, total_repump_counts AS LONG
DIM repump_duration, CR_duration AS LONG
DIM cr_wait_after_pulse, cr_wait_after_pulse_duration AS LONG
DIM counter_channel, counter_pattern AS LONG
DIM E_laser_DAC_channel, A_laser_DAC_channel, repump_laser_DAC_channel AS LONG

DIM repump_mod_DAC_channel, cr_mod_DAC_channel AS LONG
DIM repump_mod_activated, cr_mod_activated AS LONG

DIM repump_voltage, repump_off_voltage, E_CR_voltage, A_CR_voltage, E_off_voltage, A_off_voltage AS FLOAT
DIM repump_DAC, repump_off_DAC, E_CR_DAC, A_CR_DAC, E_off_DAC, A_off_DAC AS LONG

DIM cr_mod_control_offset, cr_mod_control_amp, cr_mod_control, cr_mod_control_avg, cr_mod_control_avg_part AS FLOAT
DIM repump_mod_control,repump_mod_control_offset, repump_mod_control_amp AS FLOAT
DIM repump_mod_control_sign_index AS LONG


SUB init_CR()
  counter_channel              = DATA_30[1]
  repump_laser_DAC_channel     = DATA_30[2]
  E_laser_DAC_channel          = DATA_30[3] ' this is also used in the main script i.e. MBI_lt2 for ssro, more logical to define there? -machiel 30-12-'13
  A_laser_DAC_channel          = DATA_30[4]
  repump_duration              = DATA_30[5]
  CR_duration                  = DATA_30[6]
  cr_wait_after_pulse_duration = DATA_30[7]
  CR_preselect                 = DATA_30[8]
  CR_probe                     = DATA_30[9]
  CR_repump                    = DATA_30[10]
  repump_mod_DAC_channel       = DATA_30[11] '4
  cr_mod_DAC_channel           = DATA_30[12] '5

  repump_voltage               = DATA_31[1]
  repump_off_voltage           = DATA_31[2]
  E_CR_voltage                 = DATA_31[3]
  A_CR_voltage                 = DATA_31[4]
  E_off_voltage                = DATA_31[5]
  A_off_voltage                = DATA_31[6]
  repump_mod_control_offset    = DATA_31[7]  '5.0
  repump_mod_control_amp       = DATA_31[8]  '1.0 - 2.0
  cr_mod_control_offset        = DATA_31[9]  '0.0
  cr_mod_control_amp           = DATA_31[10] '0.1 
  cr_mod_control_avg           = DATA_31[11]
  
  repump_DAC = 3277*repump_voltage+32768
  repump_off_DAC = 3277*repump_off_voltage+32768
  E_CR_DAC = 3277* E_CR_voltage +32768
  A_CR_DAC = 3277* A_CR_voltage +32768
  E_off_DAC = 3277* E_off_voltage +32768
  A_off_DAC = 3277* A_off_voltage +32768
  
  repump_mod_control_sign_index = 1
  
  FOR cr_i = 1 TO max_repetitions
    DATA_22[cr_i] = 0
    DATA_23[cr_i] = 0
  NEXT cr_i
  FOR cr_i = 1 TO max_stat
    DATA_26[cr_i] = 0
  NEXT cr_i
  'fill data_18 with a sine for repump mod control (calculating sines is slow --> cannot do it during the event cycle)
  FOR cr_i = 1 TO repump_duration
    repump_mod_control = Sin(-3.14+2*3.14*cr_i/repump_duration)
    ' DATA_18[cr_i] = repump_mod_control
    DATA_16[1][cr_i] = repump_mod_control_amp*repump_mod_control
    DATA_16[2][cr_i] = -1.0*repump_mod_control_amp*repump_mod_control
    
    DATA_18[1][cr_i] = 3277*(repump_mod_control_amp*repump_mod_control+repump_mod_control_offset)+32768
    DATA_18[2][cr_i] = 3277*(-1.0*repump_mod_control_amp*repump_mod_control+repump_mod_control_offset)+32768
  NEXT cr_i
  'fill data_19 with a sine for cr mod control (calculating sines is slow --> cannot do it during the event cycle)
  FOR cr_i = 1 TO CR_duration
    cr_mod_control = Sin(-3.14+2*3.14*cr_i/CR_duration)
    ' DATA_19[cr_i] = cr_mod_control
    DATA_17[cr_i] = cr_mod_control
    DATA_19[cr_i] = 3277*(cr_mod_control_amp*cr_mod_control+cr_mod_control_offset)+32768
  NEXT cr_i
  'fill data_17 with a sine for repump mod control (calculating sines is slow --> cannot do it during the event cycle)
   
  counter_pattern     = 2 ^ (counter_channel-1)
  total_repump_counts = 0
  total_CR_counts = 0
  CR_failed           = 0
  repumps             = 0
  cr_wait_after_pulse    = 0
  cr_mode = 0
  cr_timer = 0
  cr_i=2
  cr_counts=0
  cr_mod_control_avg_part = 1.-1./cr_mod_control_avg
  
  'output pars
  PAR_70 = 0                      ' cumulative counts from probe intervals
  PAR_71 = 0                      ' number of repumps
  PAR_72 = 0                      ' number of CR checks performed (lt1)
  
  par_76 = 0                      ' cumulative counts during repumping
  par_79 = 0                      ' CR below treshold events

  FPar_78 = 0.0                   ' current repump modulation error signal
  FPar_79 = 0.0                   ' current CR modulation error signal
  
  'control pars
  Par_75 = CR_preselect
  Par_68 = CR_probe
  par_69 = CR_repump
  par_66 = 0                      ' activate repump modulation
  par_67 = 0                      ' activate cr gate modulation
  'before continueing to the next positioner dac
  
ENDSUB



FUNCTION CR_check(first_cr, repetition_index) As LONG

  CR_check = 0
  
  IF (cr_wait_after_pulse > 0) THEN
    DEC(cr_wait_after_pulse)
  ELSE

    SELECTCASE cr_mode 
        
      CASE 0    ' repump
              
        IF (cr_timer = 0) THEN
          CR_repump                    = PAR_69
          IF (cr_counts < CR_repump)  THEN  'only repump 
            P2_CNT_CLEAR(CTR_MODULE,counter_pattern)    'clear counter
            P2_CNT_ENABLE(CTR_MODULE,counter_pattern)    'turn on counter
            P2_DAC(DAC_MODULE,repump_laser_DAC_channel, repump_DAC) ' turn on green
            repumps = repumps + 1
            inc(par_71)
            '------------repump modulation control
            repump_mod_activated         = PAR_66
            cr_r_old_counts = 0
            cr_i=0
            IF (repump_mod_control_sign_index > 1) THEN
              repump_mod_control_sign_index = 1
            ELSE
              repump_mod_control_sign_index = 2
            ENDIF
            '--------------------------------
          ELSE
            cr_mode = 1
            cr_timer = -1
            current_CR_threshold = CR_preselect
          ENDIF
          
        ELSE 
          
          IF (cr_timer = repump_duration) THEN
            
            P2_DAC(DAC_MODULE,repump_laser_DAC_channel, repump_off_DAC) ' turn off green
            cr_r_counts = P2_CNT_READ(CTR_MODULE,counter_channel)
            P2_CNT_ENABLE(CTR_MODULE,0)
            P2_CNT_CLEAR(CTR_MODULE,counter_pattern)
            
            total_repump_counts = total_repump_counts + cr_r_counts
            PAR_76 = total_repump_counts
            
            cr_mode = 1
            cr_timer = -1
            cr_wait_after_pulse = cr_wait_after_pulse_duration
            current_cr_threshold = CR_preselect
                        
          ELSE 
            IF (repump_mod_activated>0) THEN

              '------------repump modulation control
              IF (cr_i = 0) THEN
                cr_i = 2
                ' repump_mod_control=DATA_18[cr_timer]
                ' P2_DAC_2(repump_mod_DAC_channel, 3277*(repump_mod_control_amp*repump_mod_control+repump_mod_control_offset)+32768) ' put current voltage on freq mod aom
                P2_DAC_2(repump_mod_DAC_channel, DATA_18[repump_mod_control_sign_index][cr_timer])
              ELSE
                cr_r_counts = P2_CNT_READ(CTR_MODULE,counter_channel)
                FPar_78=FPar_78*0.9999+DATA_16[repump_mod_control_sign_index][cr_timer]*(cr_r_counts-cr_r_old_counts)
                ' FPar_78=FPar_78*0.9999+repump_mod_control*repump_mod_control_amp*(cr_r_counts-cr_r_old_counts)
                cr_r_old_counts=cr_r_counts
              ENDIF
              DEC(cr_i)
            ENDIF          
          ENDIF
        ENDIF
        
      CASE 1  ' ----cr modulation control before CR check
        IF (cr_timer = 0) THEN
          CR_preselect                 = PAR_75
          CR_probe                     = PAR_68
          cr_mod_activated             = PAR_67
          P2_DAC(DAC_MODULE,E_laser_DAC_channel, E_CR_DAC) ' turn on E laser
          P2_DAC(DAC_MODULE,A_laser_DAC_channel, A_CR_DAC) ' turn on A laser
          P2_CNT_CLEAR(CTR_MODULE,counter_pattern)    'clear counter
          P2_CNT_ENABLE(CTR_MODULE,counter_pattern)    'turn on counter
          cr_old_counts = 0
          IF (cr_mod_activated > 0) THEN
            'cr_mod_control_amp = -1.0*cr_mod_control_amp
            cr_i=0
          ELSE
            cr_mode = 2 '---goto normal CR check
          ENDIF
        ELSE
          IF (cr_timer = CR_duration) THEN
            cr_mode = 2 '---goto normal CR check
            cr_timer = 0
            P2_CNT_CLEAR(CTR_MODULE,counter_pattern)    'clear counter - we do not take the counts during the modulation fase into account
            ' maybe we could make this a setting: for SSRO it is fine to take the counts uring the modulation into account, for TPQI we need to clear here
          ELSE  
            '------------cr modulation control
            IF (cr_i = 0) THEN
              cr_i = 2
              ' cr_mod_control=DATA_19[cr_timer]
              ' P2_DAC_2(cr_mod_DAC_channel, 3277*(cr_mod_control_amp*cr_mod_control+cr_mod_control_offset)+32768) ' put current voltage on gate
              P2_DAC_2(cr_mod_DAC_channel, DATA_19[cr_timer])
            ELSE
              cr_counts = P2_CNT_READ(CTR_MODULE,counter_channel)
              FPar_79 = FPar_79*cr_mod_control_avg_part+DATA_17[cr_timer]*(cr_counts-cr_old_counts)
              cr_old_counts=cr_counts
            ENDIF
            DEC(cr_i)
          ENDIF
        ENDIF
        
      CASE 2    ' E/A laser CR check
                 
        IF (cr_timer = CR_duration) THEN
          P2_DAC(DAC_MODULE,E_laser_DAC_channel, E_off_DAC) ' turn off E laser
          P2_DAC(DAC_MODULE,A_laser_DAC_channel, A_off_DAC) ' turn off A laser
          cr_counts = P2_CNT_READ(CTR_MODULE,counter_channel)
          P2_CNT_ENABLE(CTR_MODULE,0)
          P2_CNT_CLEAR(CTR_MODULE,counter_pattern)
          total_CR_counts = total_CR_counts + cr_counts
          PAR_70 = total_CR_counts
          Inc(Par_72)
          IF (first_cr > 0) THEN ' first CR after SSRO sequence
            DATA_23[repetition_index] = cr_counts
            first_cr = 0
          ENDIF
                  
          IF (cr_counts < current_cr_threshold) THEN
            cr_mode = 0
            CR_check = -1
            inc(CR_failed)
            inc(PAR_79)
          ELSE
            cr_mode = 1
            CR_check = 1
            DATA_22[repetition_index+1] = cr_counts  ' CR before next SSRO sequence
            current_cr_threshold = CR_probe
          ENDIF
          cr_timer = -1
          cr_wait_after_pulse = cr_wait_after_pulse_duration
        ENDIF
        
    ENDSELECT
    inc(cr_timer)
  ENDIF
  
ENDFUNCTION
  
SUB reset_CR()
  cr_timer = 0  
  cr_mode = 0 ' I think that in principle we only need to reset the mode. But this makes me happier.
  cr_counts = CR_repump + 1
  cr_r_old_counts = 0
  cr_i = 0
  cr_old_counts = 0
ENDSUB

SUB finish_CR()
  DATA_26[1] = repumps
  DATA_26[2] = total_repump_counts
  DATA_26[3] = CR_failed
ENDSUB

