'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 9
' Initial_Processdelay           = 3000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 5.0.8
' Optimize                       = Yes
' Optimize_Level                 = 1
' Info_Last_Save                 = TUD277459  DASTUD\tud277459
'<Header End>
' this program implements CR check and N times |SP - AWG sequence - integrated SSRO - SP_repump - delay|^N
' controlled by ADwin Pro
'
' protocol:
' mode  0:  CR check
' mode  2:  spin pumping with Ex or A pulse, photon counting for time dependence of SP
' mode  3:  optional: spin pumping with Ex or A pulse, photon counting for postselection on 0 counts
'           counts > 0 -> mode 1
' mode  4:  optional: trigger for AWG sequence, or static wait time
' mode  5:  SSRO -> mode 1, data saved is binary number for each Nth RO step

#INCLUDE ADwinPro_All.inc
#INCLUDE .\configuration.inc
#INCLUDE .\cr.inc
#INCLUDE .\SSRO.inc

#DEFINE max_SP_bins        500 

'init
DIM DATA_20[100] AS LONG      ' integer parameters
DIM DATA_21[100] AS FLOAT     ' float parameters

'return

DIM DATA_24[max_SP_bins] AS LONG AT EM_LOCAL      ' SP counts 
DIM DATA_25[max_repetitions] AS LONG AT DRAM_EXTERN    ' SSRO counts


DIM AWG_start_DO_channel, AWG_done_DI_channel AS LONG
DIM send_AWG_start, wait_for_AWG_done AS LONG
DIM sequence_wait_time AS LONG
DIM SP_duration, SP_repump_duration,repump_E,repump_A AS LONG
DIM SSRO_repetitions, SSRO_duration, SSRO_stop_after_first_photon AS LONG ' stop_after.. for dynamical-stop RO, not used atm.
DIM cycle_duration AS LONG
DIM wait_after_pulse, wait_after_pulse_duration AS LONG

DIM E_SP_voltage, A_SP_voltage, E_RO_voltage, A_RO_voltage,A_SP_repump_voltage AS FLOAT

DIM timer, aux_timer, mode, i, sweep_index,sweep_length AS LONG
DIM AWG_done AS LONG
DIM first AS LONG

DIM repetition_counter AS LONG
DIM AWG_done_DI_pattern AS LONG
DIM counts AS LONG
DIM wait_time_between_msmnts AS LONG

INIT:  
  init_CR()
  AWG_start_DO_channel         = DATA_20[1]
  AWG_done_DI_channel          = DATA_20[2]
  send_AWG_start               = DATA_20[3]
  wait_for_AWG_done            = DATA_20[4]
  SP_duration                  = DATA_20[5]
  sequence_wait_time           = DATA_20[6]
  wait_after_pulse_duration    = DATA_20[7]
  SSRO_repetitions             = DATA_20[8]
  SSRO_duration                = DATA_20[9] 
  SSRO_stop_after_first_photon = DATA_20[10] ' for dynamical-stop RO, not used atm
  cycle_duration               = DATA_20[11] '(in processor clock cycles, 3.333ns)
  SP_repump_duration           = DATA_20[12]
  wait_time_between_msmnts     = DATA_20[13]
  repump_E                     = DATA_20[14]
  repump_A                     = DATA_20[15]
  
  E_SP_voltage                 = DATA_21[1]
  A_SP_voltage                 = DATA_21[2]
  E_RO_voltage                 = DATA_21[3]
  A_RO_voltage                 = DATA_21[4]
  A_SP_repump_voltage          = DATA_21[5]
  par_80 = SSRO_stop_after_first_photon
  
  FOR i = 1 TO max_SP_bins
    DATA_24[i] = 0          ' counts during SP
  NEXT i
  
  FOR i = 1 TO SSRO_repetitions
    DATA_25[i] = 0          'result of ssro's
  NEXT i
   
  AWG_done_DI_pattern = 2 ^ AWG_done_DI_channel

  repetition_counter  = 0
  first               = 0
  wait_after_pulse    = 0
      
  P2_DAC(DAC_MODULE,repump_laser_DAC_channel, 3277*repump_off_voltage+32768) ' turn off repump
  P2_DAC(DAC_MODULE,E_laser_DAC_channel, 3277*E_off_voltage+32768) ' turn off Ex laser
  P2_DAC(DAC_MODULE,A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off Ex laser

  P2_CNT_ENABLE(CTR_MODULE,0000b) 'turn off all counters
  P2_CNT_MODE(CTR_MODULE,counter_channel, 00001000b) 'configure counter

  P2_Digprog(DIO_MODULE,11)
  P2_DIGOUT(DIO_MODULE,AWG_start_DO_channel,0)

  sweep_length= SSRO_repetitions ' for now, only 1 CR check with N ssro reps, if later we want M times this, sweep length should be changed.
  sweep_index = 1
  mode = 0
  timer = 0
  processdelay = cycle_duration  
  
  Par_73 = repetition_counter
  Par_74 = mode
  PAR_64=0
  PAR_65=0
  PAR_69=0


EVENT:
  PAR_74=mode
  IF (wait_after_pulse > 0) THEN
    DEC(wait_after_pulse)
  ELSE

    SELECTCASE mode
        
      CASE 0 'CR check
       
        IF ( CR_check(first,repetition_counter) > 0 ) THEN
          mode = 2
          timer = -1
          first = 0
        ENDIF
               
      
      CASE 2    '  A laser spin pumping
        IF (timer = 0) THEN
          P2_DAC(DAC_MODULE,A_laser_DAC_channel, 3277*A_SP_voltage+32768) ' turn on A laser         
          P2_CNT_CLEAR(CTR_MODULE, counter_pattern)    'clear counter
          P2_CNT_ENABLE(CTR_MODULE,counter_pattern)    'turn on counter
        else
          P2_CNT_CLEAR(CTR_MODULE, counter_pattern)    'clear counter
          P2_CNT_ENABLE(CTR_MODULE,counter_pattern)    'turn on counter
          counts = P2_CNT_READ(CTR_MODULE,counter_channel)
          DATA_24[timer] = DATA_24[timer] + counts
        Endif

        IF (timer = SP_duration) THEN
          P2_CNT_ENABLE(CTR_MODULE,0)
          P2_DAC(DAC_MODULE,A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser
                       
          IF ((send_AWG_start > 0) or (sequence_wait_time > 0)) THEN
            mode = 3
          ELSE
            mode = 4
          ENDIF
          
          wait_after_pulse = wait_after_pulse_duration
          timer = -1
        ENDIF
      
      CASE 3    '  wait for AWG sequence or for fixed duration
        IF (timer = 0) THEN
          IF (send_AWG_start > 0) THEN
            P2_DIGOUT(DIO_MODULE,AWG_start_DO_channel,1)  ' AWG trigger
            CPU_SLEEP(9)               ' need >= 20ns pulse width; adwin needs >= 9 as arg, which is 9*10ns
            P2_DIGOUT(DIO_MODULE,AWG_start_DO_channel,0)
          ENDIF
          aux_timer = 0
          AWG_done = 0
        endif
         
        IF (wait_for_AWG_done > 0) THEN 
          IF (AWG_done = 0) THEN
            IF ((P2_DIGIN_LONG(DIO_MODULE) AND AWG_done_DI_channel) > 0) THEN
              AWG_done = 1
              IF (sequence_wait_time > 0) THEN
                aux_timer = timer
              ELSE
                mode = 4
                timer = -1
                wait_after_pulse = 0
              ENDIF
            ENDIF
          ELSE
            IF (timer - aux_timer >= sequence_wait_time) THEN
              mode = 4
              timer = -1
              wait_after_pulse = 0
            ENDIF
          ENDIF
        ELSE
          IF (timer >= sequence_wait_time) THEN
            mode = 4
            timer = -1
            wait_after_pulse = 0
            'ELSE
            'CPU_SLEEP(9)
          ENDIF
        ENDIF
     
      CASE 4    ' spin readout
        IF (SSRO(SSRO_duration) > 0) THEN
          if (ssro_counts > 0) then
            inc(data_25[sweep_index])
          endif
          
          inc(sweep_index)
          if (sweep_index > sweep_length) then
            sweep_index = 1
          endif
          IF ((repump_E<1) AND (repump_A<1))THEN  'skip SP_repump if we dont want it
            mode=9
            timer = -wait_time_between_msmnts
          ELSE  
            mode = 8
            timer = -1 
          ENDIF
          
          
          wait_after_pulse = wait_after_pulse_duration
          inc(repetition_counter)
          Par_73 = repetition_counter
          PAR_69 = wait_time_between_msmnts
          IF (repetition_counter = SSRO_repetitions) THEN
            END
          ENDIF
          first = 1

        ENDIF
        
      CASE 8 ' repump SP after readout
        
        IF (timer = 0) THEN
          IF (repump_E>0) THEN
            PAR_64=1
            P2_DAC(DAC_MODULE,E_laser_DAC_channel, 3277*E_SP_voltage+32768) ' turn on Ex laser
          endif
          IF (repump_A>0) THEN
            PAR_65=1
            P2_DAC(DAC_MODULE,A_laser_DAC_channel, 3277*A_SP_repump_voltage+32768)   ' turn on A laser
          endif
          
        Endif

        IF (timer = SP_repump_duration) THEN
          P2_DAC(DAC_MODULE,E_laser_DAC_channel, 3277*E_off_voltage+32768) ' turn off Ex laser
          P2_DAC(DAC_MODULE,A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser                
          timer = -wait_time_between_msmnts
          mode = 9
        ENDIF
      
      CASE 9 ' delay time
        IF (timer >= 0) THEN
          mode =2
          timer=-1
        ENDIF  
    ENDSELECT
    
    Inc(timer)
  ENDIF

FINISH:
  finish_CR()
  


